# Generated by Configurator on Sun Sep 27 21:29:09 CDT 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,SimHub,SimulatedMicroscope,SimHub
Device,SimCam,SimulatedMicroscope,SimCam
Device,SimFocus,SimulatedMicroscope,SimFocus
Device,SimObjectiveTurret,SimulatedMicroscope,SimObjectiveTurret
Device,SimXY,SimulatedMicroscope,SimXY
Device,SimShutter,SimulatedMicroscope,SimShutter

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,SimCam,SimHub
Parent,SimFocus,SimHub
Parent,SimObjectiveTurret,SimHub
Parent,SimXY,SimHub
Parent,SimShutter,SimHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,SimFocus,0

# Roles
Property,Core,Camera,SimCam
Property,Core,Shutter,SimShutter
Property,Core,Focus,SimFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# SimObjectiveTurret
Label,SimObjectiveTurret,5,100x 1.40NA Oil
Label,SimObjectiveTurret,4,60x 1.40NA Oil
Label,SimObjectiveTurret,3,40x 1.30NA Oil
Label,SimObjectiveTurret,2,40x 0.75NA
Label,SimObjectiveTurret,1,20x 0.70NA
Label,SimObjectiveTurret,0,10x 0.30NA

# Configuration presets
# Group: Objective
# Preset: 60x 1.40NA Oil
ConfigGroup,Objective,60x 1.40NA Oil,SimObjectiveTurret,Label,60x 1.40NA Oil

# Preset: 40x 1.30NA Oil
ConfigGroup,Objective,40x 1.30NA Oil,SimObjectiveTurret,Label,40x 1.30NA Oil

# Preset: 20x 0.70NA
ConfigGroup,Objective,20x 0.70NA,SimObjectiveTurret,Label,20x 0.70NA

# Preset: 10x 0.30NA
ConfigGroup,Objective,10x 0.30NA,SimObjectiveTurret,Label,10x 0.30NA

# Preset: 100x 1.40NA Oil
ConfigGroup,Objective,100x 1.40NA Oil,SimObjectiveTurret,Label,100x 1.40NA Oil

# Preset: 40x 0.75NA
ConfigGroup,Objective,40x 0.75NA,SimObjectiveTurret,Label,40x 0.75NA


# Group: Channel
# Preset: Rhodamine
ConfigGroup,Channel,Rhodamine,SimCam,Mode,Filaments
ConfigGroup,Channel,Rhodamine,Core,Shutter,SimShutter

# Preset: DAPI
ConfigGroup,Channel,DAPI,SimCam,Mode,Nuclei
ConfigGroup,Channel,DAPI,Core,Shutter,SimShutter


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,SimFocus,SlewTimePerStep_s,0.0010
ConfigGroup,System,Startup,SimXY,SlewTimePerStep_s,0.0005



# PixelSize settings
# Resolution preset: 40x Oil
ConfigPixelSize,40x Oil,SimObjectiveTurret,Label,40x 1.30NA Oil
PixelSize_um,40x Oil,0.2498
PixelSizeAffine,40x Oil,-0.24955984960699382,4.4013131952134506E-4,0.0,4.891408627701241E-5,0.2500488950127921,0.0
PixelSizeAngle_dxdz,40x Oil,0.0
PixelSizeAngle_dydz,40x Oil,0.0
PixelSizeOptimalZ_Um,40x Oil,0.0
# Resolution preset: 20x Air
ConfigPixelSize,20x Air,SimObjectiveTurret,Label,20x 0.70NA
PixelSize_um,20x Air,0.5003
PixelSizeAffine,20x Air,-0.5001950868113361,-3.8910255782523756E-4,0.0,0.0013720340684305896,0.5003835942243289,0.0
PixelSizeAngle_dxdz,20x Air,0.0
PixelSizeAngle_dydz,20x Air,0.0
PixelSizeOptimalZ_Um,20x Air,0.0
# Resolution preset: 100x Oil
ConfigPixelSize,100x Oil,SimObjectiveTurret,Label,100x 1.40NA Oil
PixelSize_um,100x Oil,0.1004
PixelSizeAffine,100x Oil,-0.09938124449824046,0.0012063864786428689,0.0,0.002063387031758628,0.10132567263151765,0.0
PixelSizeAngle_dxdz,100x Oil,0.0
PixelSizeAngle_dydz,100x Oil,0.0
PixelSizeOptimalZ_Um,100x Oil,0.0
# Resolution preset: 60x Oil
ConfigPixelSize,60x Oil,SimObjectiveTurret,Label,60x 1.40NA Oil
PixelSize_um,60x Oil,0.1669
PixelSizeAffine,60x Oil,-0.16647168434711193,5.201221296731221E-4,0.0,2.600610648365046E-4,0.16725186754162155,0.0
PixelSizeAngle_dxdz,60x Oil,0.0
PixelSizeAngle_dydz,60x Oil,0.0
PixelSizeOptimalZ_Um,60x Oil,0.0
# Resolution preset: 40x Air
ConfigPixelSize,40x Air,SimObjectiveTurret,Label,40x 0.75NA
PixelSize_um,40x Air,0.2506
PixelSizeAffine,40x Air,-0.24985486614376282,1.4507693208295038E-4,0.0,0.0013061647300465682,0.2513058795817933,0.0
PixelSizeAngle_dxdz,40x Air,0.0
PixelSizeAngle_dydz,40x Air,0.0
PixelSizeOptimalZ_Um,40x Air,0.0
# Resolution preset: 10x Air
ConfigPixelSize,10x Air,SimObjectiveTurret,Label,10x 0.30NA
PixelSize_um,10x Air,0.9998
PixelSizeAffine,10x Air,-1.0,3.910833007431578E-4,0.0,-9.117940851862583E-17,0.9996089166992571,0.0
PixelSizeAngle_dxdz,10x Air,0.0
PixelSizeAngle_dydz,10x Air,0.0
PixelSizeOptimalZ_Um,10x Air,0.0

