# Generated by Configurator on Sun Sep 27 21:29:09 CDT 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,SimHub,SimulatedMicroscope,SimHub
Device,SimCam,SimulatedMicroscope,SimCam
Device,SimFocus,SimulatedMicroscope,SimFocus
Device,SimObjectiveTurret,SimulatedMicroscope,SimObjectiveTurret
Device,SimXY,SimulatedMicroscope,SimXY
Device,SimShutter,SimulatedMicroscope,SimShutter

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,SimCam,SimHub
Parent,SimFocus,SimHub
Parent,SimObjectiveTurret,SimHub
Parent,SimXY,SimHub
Parent,SimShutter,SimHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,SimFocus,0

# Roles
Property,Core,Camera,SimCam
Property,Core,Shutter,SimShutter
Property,Core,Focus,SimFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# SimObjectiveTurret
Label,SimObjectiveTurret,5,100x 1.40NA Oil
Label,SimObjectiveTurret,4,60x 1.40NA Oil
Label,SimObjectiveTurret,3,40x 1.30NA Oil
Label,SimObjectiveTurret,2,40x 0.75NA
Label,SimObjectiveTurret,1,20x 0.70NA
Label,SimObjectiveTurret,0,10x 0.30NA

# Configuration presets

# PixelSize settings
