# Generated by Configurator on Tue Sep 15 14:10:58 CDT 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,SimHub,SimulatedCamera,SimHub
Device,SimCam,SimulatedCamera,SimCam
Device,SimFocus,SimulatedCamera,SimFocus
Device,SimObjectiveTurret,SimulatedCamera,SimObjectiveTurret
Device,SimXY,SimulatedCamera,SimXY

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,SimCam,SimHub
Parent,SimFocus,SimHub
Parent,SimObjectiveTurret,SimHub
Parent,SimXY,SimHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,SimFocus,0

# Roles
Property,Core,Camera,SimCam
Property,Core,Focus,SimFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# SimObjectiveTurret
Label,SimObjectiveTurret,5,100x 1.40NA Oil
Label,SimObjectiveTurret,4,60x 1.40NA Oil
Label,SimObjectiveTurret,3,40x 0.30NA Oil
Label,SimObjectiveTurret,2,40x 0.75NA
Label,SimObjectiveTurret,1,20x 0.70NA
Label,SimObjectiveTurret,0,10x 0.30NA

# Configuration presets

# PixelSize settings
# Resolution preset: 40x 0.30NA Oil
ConfigPixelSize,40x 0.30NA Oil,SimObjectiveTurret,Label,40x 0.30NA Oil
PixelSize_um,40x 0.30NA Oil,.25
PixelSizeAffine,40x 0.30NA Oil,.25,0.0,0.0,0.0,.25,0.0
PixelSizeAngle_dxdz,40x 0.30NA Oil,0.0
PixelSizeAngle_dydz,40x 0.30NA Oil,0.0
PixelSizeOptimalZ_Um,40x 0.30NA Oil,0.0
# Resolution preset: 60x 1.40NA Oil
ConfigPixelSize,60x 1.40NA Oil,SimObjectiveTurret,Label,60x 1.40NA Oil
PixelSize_um,60x 1.40NA Oil,.16666666666666667
PixelSizeAffine,60x 1.40NA Oil,.16666666666666667,0.0,0.0,0.0,.16666666666666667,0.0
PixelSizeAngle_dxdz,60x 1.40NA Oil,0.0
PixelSizeAngle_dydz,60x 1.40NA Oil,0.0
PixelSizeOptimalZ_Um,60x 1.40NA Oil,0.0
# Resolution preset: 20x 0.70NA
ConfigPixelSize,20x 0.70NA,SimObjectiveTurret,Label,20x 0.70NA
PixelSize_um,20x 0.70NA,.50
PixelSizeAffine,20x 0.70NA,.50,0.0,0.0,0.0,.50,0.0
PixelSizeAngle_dxdz,20x 0.70NA,0.0
PixelSizeAngle_dydz,20x 0.70NA,0.0
PixelSizeOptimalZ_Um,20x 0.70NA,0.0
# Resolution preset: 10x 0.30NA
ConfigPixelSize,10x 0.30NA,SimObjectiveTurret,Label,10x 0.30NA
PixelSize_um,10x 0.30NA,1.0
PixelSizeAffine,10x 0.30NA,1.0,0.0,0.0,0.0,1.0,0.0
PixelSizeAngle_dxdz,10x 0.30NA,0.0
PixelSizeAngle_dydz,10x 0.30NA,0.0
PixelSizeOptimalZ_Um,10x 0.30NA,0.0
# Resolution preset: 100X 1.40NA Oil
ConfigPixelSize,100X 1.40NA Oil,SimObjectiveTurret,Label,100x 1.40NA Oil
PixelSize_um,100X 1.40NA Oil,0.1
PixelSizeAffine,100X 1.40NA Oil,0.1,0.0,0.0,0.0,0.1,0.0
PixelSizeAngle_dxdz,100X 1.40NA Oil,0.0
PixelSizeAngle_dydz,100X 1.40NA Oil,0.0
PixelSizeOptimalZ_Um,100X 1.40NA Oil,0.0
# Resolution preset: 40X 0.75NA
ConfigPixelSize,40X 0.75NA,SimObjectiveTurret,Label,40x 0.75NA
PixelSize_um,40X 0.75NA,0.25
PixelSizeAffine,40X 0.75NA,0.25,0.0,0.0,0.0,0.25,0.0
PixelSizeAngle_dxdz,40X 0.75NA,0.0
PixelSizeAngle_dydz,40X 0.75NA,0.0
PixelSizeOptimalZ_Um,40X 0.75NA,0.0

